/*
 * Macro template to process multiple images in a folder
 */

#@ File (label = "Input directory", style = "directory") input
#@ File (label = "Output directory", style = "directory") output
#@ String (label = "File suffix", value = ".tif") suffix

// See also Process_Folder.py for a version of this code
// in the Python scripting language.

processFolder(input);

// function to scan folders/subfolders/files to find files with correct suffix
function processFolder(input) {
	list = getFileList(input);
	list = Array.sort(list);
	for (i = 0; i < list.length; i++) {
		if(File.isDirectory(input + File.separator + list[i]))
			processFolder(input + File.separator + list[i]);
		if(endsWith(list[i], suffix))
			processFile(input, output, list[i]);
	}
}

function processFile(input, output, file) {
	// Do the processing here by adding your own code.
	// Leave the print statements until things work, then remove them.
	
	run("Bio-Formats Windowless Importer", "open=" + input + File.separator + file);
	run("8-bit");
	run("Enhance Contrast", "saturated=0.35");
	saveAs("tif", output + File.separator + file);
	close();

	print("Processing: " + input + File.separator + file);
	print("Saving to: " + output);
}
print("Done.");